<CompuCell3D Revision="20171208" Version="3.7.7">
   <Metadata>
       <NumberOfProcessors>2</NumberOfProcessors>
   </Metadata>

   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="300" y="300" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>3</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="stem"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="stem">10.0</Energy>
      <Energy Type1="stem" Type2="stem">10.0</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
</CompuCell3D>
